PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  End Message = $end_message
  Experiment info = {'participant': '', 'condition': '["SCN","SCR","TCN","TCR"]'}
  Full-screen window = True
  Incomplete URL = $incomplete_url
  Monitor = testMonitor
  Resources = ['Instructions/train4.png', 'Instructions/train8SCN.png', 'Instructions/train8SCR.png', 'Instructions/W.png', 'stimuli/rock_image_info.xlsx', 'rock_images/I_Andesite_01.jpg', 'rock_images/I_Andesite_02.jpg', 'rock_images/I_Andesite_03.jpg', 'rock_images/I_Andesite_04.jpg', 'rock_images/I_Andesite_05.jpg', 'rock_images/I_Andesite_06.jpg', 'rock_images/I_Andesite_07.jpg', 'rock_images/I_Andesite_09.jpg', 'rock_images/I_Andesite_10.jpg', 'rock_images/I_Andesite_11.jpg', 'rock_images/I_Andesite_14.jpg', 'rock_images/I_Andesite_16.jpg', 'rock_images/I_Basalt_01.jpg', 'rock_images/I_Basalt_02.jpg', 'rock_images/I_Basalt_04.jpg', 'rock_images/I_Basalt_05.jpg', 'rock_images/I_Basalt_06.jpg', 'rock_images/I_Basalt_08.jpg', 'rock_images/I_Basalt_09.jpg', 'rock_images/I_Basalt_10.jpg', 'rock_images/I_Basalt_11.jpg', 'rock_images/I_Basalt_12.jpg', 'rock_images/I_Basalt_14.jpg', 'rock_images/I_Basalt_16.jpg', 'rock_images/I_Diorite_02.jpg', 'rock_images/I_Diorite_06.jpg', 'rock_images/I_Diorite_07.jpg', 'rock_images/I_Diorite_08.jpg', 'rock_images/I_Diorite_09.jpg', 'rock_images/I_Diorite_10.jpg', 'rock_images/I_Diorite_11.jpg', 'rock_images/I_Diorite_12.jpg', 'rock_images/I_Diorite_13.jpg', 'rock_images/I_Diorite_14.jpg', 'rock_images/I_Diorite_15.jpg', 'rock_images/I_Diorite_16.jpg', 'rock_images/I_Gabbro_01.jpg', 'rock_images/I_Gabbro_03.jpg', 'rock_images/I_Gabbro_05.jpg', 'rock_images/I_Gabbro_08.jpg', 'rock_images/I_Gabbro_09.jpg', 'rock_images/I_Gabbro_10.jpg', 'rock_images/I_Gabbro_11.jpg', 'rock_images/I_Gabbro_12.jpg', 'rock_images/I_Gabbro_13.jpg', 'rock_images/I_Gabbro_14.jpg', 'rock_images/I_Gabbro_15.jpg', 'rock_images/I_Gabbro_16.jpg', 'rock_images/I_Obsidian_02.jpg', 'rock_images/I_Obsidian_04.jpg', 'rock_images/I_Obsidian_05.jpg', 'rock_images/I_Obsidian_06.jpg', 'rock_images/I_Obsidian_07.jpg', 'rock_images/I_Obsidian_08.jpg', 'rock_images/I_Obsidian_09.jpg', 'rock_images/I_Obsidian_10.jpg', 'rock_images/I_Obsidian_11.jpg', 'rock_images/I_Obsidian_12.jpg', 'rock_images/I_Obsidian_14.jpg', 'rock_images/I_Obsidian_16.jpg', 'rock_images/I_Pegmatite_03.jpg', 'rock_images/I_Pegmatite_05.jpg', 'rock_images/I_Pegmatite_06.jpg', 'rock_images/I_Pegmatite_07.jpg', 'rock_images/I_Pegmatite_08.jpg', 'rock_images/I_Pegmatite_09.jpg', 'rock_images/I_Pegmatite_10.jpg', 'rock_images/I_Pegmatite_11.jpg', 'rock_images/I_Pegmatite_12.jpg', 'rock_images/I_Pegmatite_13.jpg', 'rock_images/I_Pegmatite_15.jpg', 'rock_images/I_Pegmatite_16.jpg', 'rock_images/I_Peridotite_02.jpg', 'rock_images/I_Peridotite_04.jpg', 'rock_images/I_Peridotite_05.jpg', 'rock_images/I_Peridotite_06.jpg', 'rock_images/I_Peridotite_07.jpg', 'rock_images/I_Peridotite_08.jpg', 'rock_images/I_Peridotite_10.jpg', 'rock_images/I_Peridotite_12.jpg', 'rock_images/I_Peridotite_13.jpg', 'rock_images/I_Peridotite_14.jpg', 'rock_images/I_Peridotite_15.jpg', 'rock_images/I_Peridotite_16.jpg', 'rock_images/I_Pumice_02.jpg', 'rock_images/I_Pumice_03.jpg', 'rock_images/I_Pumice_04.jpg', 'rock_images/I_Pumice_05.jpg', 'rock_images/I_Pumice_06.jpg', 'rock_images/I_Pumice_08.jpg', 'rock_images/I_Pumice_09.jpg', 'rock_images/I_Pumice_10.jpg', 'rock_images/I_Pumice_13.jpg', 'rock_images/I_Pumice_14.jpg', 'rock_images/I_Pumice_15.jpg', 'rock_images/I_Pumice_16.jpg', 'stimuli/train_instructionsSCN.xlsx', 'stimuli/train_instructionsSCR.xlsx', 'stimuli/train_instructionsTCN.xlsx', 'stimuli/train_instructionsTCR.xlsx', 'Instructions/train3TC.png', 'Instructions/train6TC.png', 'Instructions/train7TC.png', 'Instructions/train6SC.png', 'Instructions/train7SC.png', 'Instructions/test1.png', 'Instructions/test2.png', 'Instructions/test3.png', 'Instructions/train1.png', 'Instructions/train2.png', 'Instructions/train3SC.png', 'Instructions/train5.png', 'stimuli/test_instructions.xlsx', 'img/leftarrow.png', 'img/next.png', 'img/rightarrow.png']
  Save excel file = True
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  colPriority = {'participant': 'priority.CRITICAL', 'condition': 'priority.CRITICAL', 'block': 'priority.CRITICAL', 'phase': 'priority.CRITICAL', 'trial': 'priority.CRITICAL', 'cat': 'priority.CRITICAL', 'token': 'priority.CRITICAL', 'row': 'priority.CRITICAL', 'col': 'priority.CRITICAL', 'resp': 'priority.CRITICAL', 'corr': 'priority.CRITICAL', 't_resp': 'priority.CRITICAL', 't_select': 'priority.CRITICAL', 'cat_rec': 'priority.CRITICAL', 'token_rec': 'priority.CRITICAL'}
  color = white
  expName = LearnStrategy
  keyboardBackend = ioHub
  logging level = data
  sortColumns = priority
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Routines
  Routine instPrep
    RoutineSettingsComponent instPrep
      saveStartStop = False
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    CodeComponent instrPrecode
      Code Type = Both
      Begin Experiment:
        cur_row_train = 0
        show_instructions_train = 1
        if expInfo['condition'] in ['TCN', 'TCR']:
            max_slides_train = 8 - 1
        elif expInfo['condition'] == 'SCN':
            max_slides_train = 9 - 1
        elif expInfo['condition'] == 'SCR':
            max_slides_train = 9 - 1

        instruct_filename = 'stimuli/train_instructions' + expInfo['condition'] + '.xlsx'
        arrowSize = (0.15, 0.15)
        arrowPos_back = (-0.5,-0.38)
        arrowPos_next = (0.5,-0.38)
      Begin JS Experiment:
        cur_row_train = 0;
        show_instructions_train = 1;
        if (['TCN', 'TCR'].includes(expInfo['condition'])) {
            max_slides_train = 8 - 1;
        } else if (expInfo['condition'] === 'SCN') {
            max_slides_train = 9 - 1;
        } else if (expInfo['condition'] === 'SCR') {
            max_slides_train = 9 - 1;
        }
        instruct_filename = (("stimuli/train_instructions" + expInfo["condition"]) + ".xlsx");
        arrowSize = [0.15, 0.15];
        arrowPos_back = [(- 0.5), (- 0.38)];
        arrowPos_next = [0.5, (- 0.38)];
      Begin JS Routine:
        if (instruct_mouse_test.isPressedIn(rightArrow)) {
            cur_row_train += 1;
        } else {
            if (instruct_mouse_test.isPressedIn(leftArrow)) {
                cur_row_train -= 1;
            }
        }
        if ((cur_row_train < 0)) {
            cur_row_train = 0;
        }
        if ((cur_row_train > max_slides_train)) {
            TrainInstructions_controller.finished = 1;
            show_instructions_train = 0;
            cur_row_train = (max_slides_train - 1);
        }
        cur_row_train_string = cur_row_train.toString();
      Begin Routine:
        if(instruct_mouse_test.isPressedIn(rightArrow)):
            cur_row_train += 1
        elif(instruct_mouse_test.isPressedIn(leftArrow)):
            cur_row_train -= 1

        if(cur_row_train < 0):
            cur_row_train = 0

        if(cur_row_train > max_slides_train):
            TrainInstructions_controller.finished = 1
            show_instructions_train = 0

            cur_row_train = max_slides_train - 1

        cur_row_train_string = str(cur_row_train)
  Routine Thankyou
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    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thanks for participating
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  Routine feedback_neutral
    RoutineSettingsComponent feedback_neutral
      saveStartStop = False
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    CodeComponent full_screen
      Code Type = Both
      Each Frame:
        if frameN > 10:
            if not psychoJS.window._windowAlreadyInFullScreen:
                alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate")
                quitPsychoJS('',false)
      Each JS Frame:
        if (frameN > 10) {
            if (! psychoJS.window._windowAlreadyInFullScreen) {
            alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate");
            quitPsychoJS('',false);
            }
        }
    TextComponent fb_text_t
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Okay
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  Routine feedback_corrective
    RoutineSettingsComponent feedback_corrective
      saveStartStop = False
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    CodeComponent full_screen_2
      Code Type = Both
      Each Frame:
        if frameN > 10:
            if not psychoJS.window._windowAlreadyInFullScreen:
                alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate")
                quitPsychoJS('',false)
      Each JS Frame:
        if (frameN > 10) {
            if (! psychoJS.window._windowAlreadyInFullScreen) {
            alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate");
            quitPsychoJS('',false);
            }
        }
    CodeComponent fb_selection
      Code Type = Auto->JS
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      Begin Routine:
        corr_flag = cat_mouse_l.clicked_name[-1] == trial_rock_cat + '_rect'
        if corr_flag:
            fb_text = 'Correct!'
            fb_col = 'green'
        else:
            fb_text = 'Incorrect!'
            fb_col = 'red'
    ImageComponent trial_rock_train_2
      image [set every repeat] = $directory_path + '/' + trial_rock_file
      pos = (0, 0.1)
      saveStartStop = False
      size [set every repeat] = trial_rock_size
      startVal [time (s)] = 0.0
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    TextComponent fb_text_l
      color [set every repeat] = $fb_col
      letterHeight = 0.05
      pos = (0, -0.22)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fb_text
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    TextComponent fb_text_l_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.28)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'This rock is ' + trial_rock_cat
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    ImageComponent next
      image = img/next.png
      pos = (0, -0.4)
      saveStartStop = False
      size = next_buttonSize
      startVal [time (s)] = 0.0
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    MouseComponent fb_mouse
      clickable = next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    CodeComponent store_trial_vars_train_4
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData("corr", +corr_flag);
      End Routine:
        thisExp.addData('corr', int(corr_flag))
  Routine Classification_train
    RoutineSettingsComponent Classification_train
      saveStartStop = False
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    CodeComponent full_screen_3
      Code Type = Both
      Each Frame:
        if frameN > 10:
            if not psychoJS.window._windowAlreadyInFullScreen:
                alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate")
                quitPsychoJS('',false)
      Each JS Frame:
        if (frameN > 10) {
            if (! psychoJS.window._windowAlreadyInFullScreen) {
            alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate");
            quitPsychoJS('',false);
            }
        }
    CodeComponent trial_rock_config
      Code Type = Both
      Begin JS Routine:
        if (['SCN','SCR'].includes(expInfo['condition'])){
            rock_width = [];
            rock_height = [];
            aspect_ratio = [];
            trial_rock_file = filename_clicked;
            trial_rock_cat = cat_clicked;
            [rock_width, rock_height] = aspectRatio_clicked;
        }
        aspect_ratio = (rock_width / rock_height);
        trial_rock_height = 0.55;
        trial_rock_width = (trial_rock_height * aspect_ratio);
        trial_rock_size = [trial_rock_width, trial_rock_height];
      Begin Routine:
        if expInfo['condition'] in ['SCN','SCR']:
            trial_rock_file = filename_clicked
            rock_width,rock_height = aspectRatio_clicked
            aspect_ratio = rock_width/rock_height

        trial_rock_height = 0.55
        trial_rock_width = trial_rock_height * aspect_ratio
        trial_rock_size = [trial_rock_width,trial_rock_height]
    CodeComponent prog_bar_train
      Code Type = Both
      Begin Experiment:
        n_trials_total = 16*2
      Begin JS Experiment:
        n_trials_total = (16 * 2);
      Begin JS Routine:
        prog_total = (blocks.nTotal * n_trials_total);
        prog_cur = (((blocks.thisN * n_trials_total) + train_trials.thisN) + 2);
        prog_var = (prog_cur / prog_total);
        trial_counter_txt = "Trial # " + (train_trials.thisN + 1).toString() + "/" + train_trials.nTotal.toString();
        trial_rock_image = directory_path + "/" + trial_rock_file;
      Begin Routine:
        prog_total = blocks.nTotal * n_trials_total
        prog_cur = blocks.thisN * n_trials_total + train_trials.thisN + 2
        prog_var = prog_cur/prog_total
        trial_counter_txt = "Trial # " + str(train_trials.thisN + 1) + "/" + str(train_trials.nTotal)
        trial_rock_image = directory_path + '/' + trial_rock_file
    CodeComponent buttons_config
      Code Type = Both
      Begin Experiment:
        buttons_nrow = 2
        buttons_ncol = 4
        buttons_ntotal = buttons_nrow * buttons_ncol
        xbound = [-0.4, 0.4]
        ybound = [-0.25, -0.4]
        buttonSize = (0.22,0.08)
        xPos = []
        yPos = []
        buttonPos = []
        for i_button in range(buttons_ntotal):
            i_button_x = i_button % buttons_ncol
            i_button_y = i_button // buttons_ncol
            xPos = xbound[0] + abs(xbound[0] - xbound[1])/(buttons_ncol - 1)*i_button_x
            yPos = ybound[0] - abs(ybound[0] - ybound[1])/(buttons_nrow - 1)*i_button_y
            buttonPos.append([xPos,yPos])
      Begin JS Experiment:
        buttons_nrow = 2;
        buttons_ncol = 4;
        buttons_ntotal = (buttons_nrow * buttons_ncol);
        xbound = [(- 0.4), 0.4];
        ybound = [(- 0.25), (- 0.4)];
        buttonSize = [0.22, 0.08];
        xPos = [];
        yPos = [];
        buttonPos = [];
        for (var i_button = 0; i_button < buttons_ntotal; i_button++) {
            let i_button_x = i_button % buttons_ncol;
            let i_button_y = Math.floor(i_button / buttons_ncol);
            xPos = (xbound[0] + ((Math.abs((xbound[0] - xbound[1])) / (buttons_ncol - 1)) * i_button_x));
            yPos = (ybound[0] - ((Math.abs((ybound[0] - ybound[1])) / (buttons_nrow - 1)) * i_button_y));
            buttonPos.push([xPos, yPos]);
        }
    CodeComponent draw_button_panel
      Code Type = Both
      Begin Experiment:
        cat_button_clickable = []
        cat_button_text = []
        Button_rect =  []
        Button_txt = []
        for i_button in range(buttons_ntotal):
            cat_name = category_names[i_button]
            Button_rect = visual.TextBox(
                 win, text=None, placeholder='Type here...', font='Arial',
                 pos=buttonPos[i_button],letterHeight=0.03,
                 size=buttonSize, borderWidth=4.0,
                 color=None, colorSpace='rgb',
                 opacity=None,
                 bold=False, italic=False,
                 lineSpacing=1.0, speechPoint=None,
                 padding=0.0, alignment='center',
                 anchor='center', overflow='visible',
                 fillColor=None, borderColor='black',
                 flipHoriz=False, flipVert=False, languageStyle='LTR',
                 editable=False,
                 name=cat_name + '_rect',
                 depth=-6, autoLog=False)
            Button_txt = visual.TextStim(
                win=win, name=cat_name + '_txt',
                text=cat_name,
                font='Open Sans',
                pos=buttonPos[i_button], height=0.04, wrapWidth=None, ori=0.0,
                color='black', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=-7.0)
            cat_button_clickable.append(Button_rect)
            cat_button_text.append(Button_txt)
      Begin JS Experiment:
        cat_button_clickable = [];
        cat_button_text = [];
        Button_rect = [];
        Button_txt = [];
        for (var i_button = 0; i_button < buttons_ntotal; i_button++) {
            cat_name = category_names[i_button];
            Button_rect = new visual.TextBox({"win": psychoJS.window, "name": (cat_name + "_rect"), "text": '', "placeholder": 'Type here...', "font": 'Arial', "pos": buttonPos[i_button], "letterHeight": 0.03, "lineSpacing": 1.0, "size": buttonSize, "units": undefined, "color": null, "colorSpace": 'rgb', "fillColor": undefined, "borderColor": 'black', "borderWidth": 0.007, "languageStyle": 'LTR', "bold": false, "italic": false, "opacity": undefined, "padding": 0.0, "alignment": 'center', "overflow": 'visible', "editable": false, "multiline": true, "anchor": 'center', "depth": (-6.0)});
            Button_txt = new visual.TextStim({"win": psychoJS.window, "name": (cat_name + "_txt"), "text": cat_name, "font": "Open Sans", "pos": buttonPos[i_button], "height": 0.04, "wrapWidth": null, "ori": 0.0, "color": "black", "colorSpace": "rgb", "opacity": null, "languageStyle": "LTR", "depth": (- 7.0)});
            cat_button_clickable.push(Button_rect);
            cat_button_text.push(Button_txt);
        }
      Begin JS Routine:
        rect = [];
        txt = [];
        for (var i_button = 0; i_button < buttons_ntotal; i_button++) {
            rect = cat_button_clickable[i_button];
            txt = cat_button_text[i_button];
            rect.setAutoDraw(true);
            txt.setAutoDraw(true);
        }
      Begin Routine:
        rect = []
        txt = []
        for i_button in range(buttons_ntotal):
            rect = cat_button_clickable[i_button]
            txt = cat_button_text[i_button]
            rect.setAutoDraw(True)
            txt.setAutoDraw(True)
      End JS Routine:
        for (var i_button = 0; i_button < buttons_ntotal; i_button++) {
            rect = cat_button_clickable[i_button];
            txt = cat_button_text[i_button];
            rect.setAutoDraw(false);
            txt.setAutoDraw(false);
        }
      End Routine:
        for i_button in range(buttons_ntotal):
            rect = cat_button_clickable[i_button]
            txt = cat_button_text[i_button]
            rect.setAutoDraw(False)
            txt.setAutoDraw(False)
    CodeComponent rock_classification
      Code Type = Both
      Each Frame:
        button = []
        button_text = []
        for i_button in range(buttons_ntotal):
            button = cat_button_clickable[i_button]
            button_text = cat_button_text[i_button]
            if button.contains(cat_mouse_l):
                button.borderColor = 'red'
                button_text.color = 'red'
            else:
                button.borderColor = 'black'
                button_text.color = 'black'
      Each JS Frame:
        button = [];
        button_text = [];
        for (var i_button = 0; i_button < buttons_ntotal; i_button++) {
            button = cat_button_clickable[i_button];
            button_text = cat_button_text[i_button];
            if (button.contains(cat_mouse_l)) {
                button.borderColor = "red";
                button_text.color = "red";
            } else {
                button.borderColor = "black";
                button_text.color = "black";
            }
        }
    ImageComponent trial_rock_train
      image [set every repeat] = $trial_rock_image
      pos = (0, 0.1)
      saveStartStop = False
      size [set every repeat] = trial_rock_size
      startVal [time (s)] = 0.0
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    MouseComponent cat_mouse_l
      clickable = ...cat_button_clickable
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    TextComponent progress_bar_text
      color = black
      letterHeight = 0.05
      pos = (-0.55, 0.42)
      startVal [time (s)] = 0.0
      text = Progress
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    TextComponent train_trial_counter
      color = black
      letterHeight = 0.05
      pos = (0.55, 0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_counter_txt
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    PolygonComponent prog_bar_border
      anchor = center-left
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (-0.4, 0.42)
      shape = rectangle
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent prog_bar_rect
      anchor = center-left
      fillColor = black
      lineColor = black
      lineWidth = 4
      pos = (-0.4, 0.42)
      shape = rectangle
      size [set every repeat] = (prog_var * 0.8, 0.03)
      startVal [time (s)] = 0.0
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    CodeComponent store_trial_vars_train_3
      Code Type = Both
      End JS Routine:
        cat_resp = cat_mouse_l.clicked_name[0].split("_")[0];
        cat_resp_num = category_names.findIndex(element => element === cat_resp) + 1;
        psychoJS.experiment.addData("resp", cat_resp_num);
        psychoJS.experiment.addData("t_resp", util.round(cat_mouse_l.time[0], 3));
      End Routine:
        cat_resp = cat_mouse_l.clicked_name[0].split("_")[0]
        thisExp.addData('resp', cat_resp)
        thisExp.addData('t_resp', round(cat_mouse_l.time[0],3))
  Routine Classification_test
    RoutineSettingsComponent Classification_test
      saveStartStop = False
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    CodeComponent full_screen_4
      Code Type = Both
      Each Frame:
        if frameN > 10:
            if not psychoJS.window._windowAlreadyInFullScreen:
                alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate")
                quitPsychoJS('',false)
      Each JS Frame:
        if (frameN > 10) {
            if (! psychoJS.window._windowAlreadyInFullScreen) {
            alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate");
            quitPsychoJS('',false);
            }
        }
    CodeComponent draw_button_panel_2
      Code Type = Both
      Begin JS Routine:
        rect = [];
        txt = [];
        for (var i_cat = 0; i_cat < buttons_ntotal; i_cat++) {
            rect = cat_button_clickable[i_cat];
            txt = cat_button_text[i_cat];
            rect.setAutoDraw(true);
            txt.setAutoDraw(true);
        }
      Begin Routine:
        rect = []
        txt = []
        for i_cat in range(buttons_ntotal):
            rect = cat_button_clickable[i_cat]
            txt = cat_button_text[i_cat]
            rect.setAutoDraw(True)
            txt.setAutoDraw(True)
      End JS Routine:
        for (var i_cat = 0; i_cat < buttons_ntotal; i_cat++) {
            rect = cat_button_clickable[i_cat];
            txt = cat_button_text[i_cat];
            rect.setAutoDraw(false);
            txt.setAutoDraw(false);
        }
      End Routine:
        for i_cat in range(buttons_ntotal):
            rect = cat_button_clickable[i_cat]
            txt = cat_button_text[i_cat]
            rect.setAutoDraw(False)
            txt.setAutoDraw(False)
    CodeComponent rock_classification_2
      Code Type = Both
      Each Frame:
        button = []
        button_text = []
        for i_button in range(buttons_ntotal):
            button = cat_button_clickable[i_button]
            button_text = cat_button_text[i_button]
            if button.contains(cat_mouse_l):
                button.borderColor = 'red'
                button_text.color = 'red'
            else:
                button.borderColor = 'black'
                button_text.color = 'black'
      Each JS Frame:
        button = [];
        button_text = [];
        for (var i_button = 0; i_button < buttons_ntotal; i_button++) {
            button = cat_button_clickable[i_button];
            button_text = cat_button_text[i_button];
            if (button.contains(cat_mouse_l)) {
                button.borderColor = "red";
                button_text.color = "red";
            } else {
                button.borderColor = "black";
                button_text.color = "black";
            }
        }
    CodeComponent extract_trial_rock_info_2
      Code Type = Both
      Begin JS Routine:
        trial_image = test_images[blocks.thisN][test_trials.thisN];
        trial_rock_info = extract_rock_info(trial_image.name);
        trial_cat = trial_rock_info["type"];
        trial_token =trial_rock_info["token"];
        [rock_width, rock_height] = trial_image.size;
        aspect_ratio = (rock_width / rock_height);
        trial_rock_height = 0.6;
        trial_rock_width = (trial_rock_height * aspect_ratio);
        trial_rock_size = [trial_rock_width, trial_rock_height];
      Begin Routine:
        trial_image = test_images[blocks.thisN][test_trials.thisN]
        trial_cat = extract_rock_info(trial_image)["type"]
        trial_token = extract_rock_info(trial_image)["token"]
        rock_width,rock_height = trial_rock_test.aspectRatio
        aspect_ratio = rock_width/rock_height

        trial_rock_height = 0.6
        trial_rock_width = trial_rock_height * aspect_ratio
        trial_rock_size = [trial_rock_width,trial_rock_height]
    CodeComponent prog_bar_test
      Code Type = Auto->JS
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      Begin Routine:
        prog_total = blocks.nTotal * n_trials_total
        prog_cur = blocks.thisN * n_trials_total + train_trials.nTotal + test_trials.thisN + 2
        prog_var = prog_cur/prog_total
    ImageComponent trial_rock_test
      image [set every repeat] = $directory_path + '/' + trial_image.name
      pos = (0, 0.1)
      saveStartStop = False
      size [set every repeat] = trial_rock_size
      startVal [time (s)] = 0.0
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    TextComponent progress_bar_text_3
      color = black
      letterHeight = 0.05
      pos = (-0.55, 0.42)
      startVal [time (s)] = 0.0
      text = Progress
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    TextComponent test_trial_counter
      color = black
      letterHeight = 0.05
      pos = (0.55, 0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Trial # " + str(test_trials.thisN + 1) + "/" + str(test_trials.nTotal)
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    PolygonComponent prog_bar_border_2
      anchor = center-left
      fillColor = white
      lineColor = black
      lineWidth = 4
      pos = (-0.4, 0.42)
      shape = rectangle
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent prog_bar_rect_2
      anchor = center-left
      fillColor = black
      lineColor = black
      lineWidth = 2
      pos = (-0.4, 0.42)
      shape = rectangle
      size [set every repeat] = (prog_var * 0.8, 0.03)
      startVal [time (s)] = 0.0
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    MouseComponent cat_mouse_t
      clickable = ...cat_button_clickable
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    CodeComponent store_trial_vars_test
      Code Type = Both
      Begin JS Routine:
        psychoJS.experiment.addData("block", (blocks.thisN + 1));
        psychoJS.experiment.addData("phase", 2);
        psychoJS.experiment.addData("trial", (test_trials.thisN + 1));
      Begin Routine:
        thisExp.addData('block', blocks.thisN + 1)
        thisExp.addData('phase', 2)
        thisExp.addData('trial', test_trials.thisN + 1)
      End JS Routine:
        trial_cat_num = category_names.findIndex(element => element === trial_cat) + 1;
        cat_resp = cat_mouse_t.clicked_name.slice((- 1))[0].split("_")[0];
        cat_resp_num = category_names.findIndex(element => element === cat_resp) + 1;

        psychoJS.experiment.addData("cat", trial_cat_num);
        psychoJS.experiment.addData("token", trial_token);
        psychoJS.experiment.addData("resp", cat_resp_num);
        psychoJS.experiment.addData("corr", +(cat_resp === trial_cat));
        psychoJS.experiment.addData("t_resp", util.round(cat_mouse_t.time[0], 3));

        cat_list.push(trial_cat);
        resp_list.push(cat_resp);
        accuracy_dict[trial_cat].push(cat_resp == trial_cat);
      End Routine:
        thisExp.addData('cat', trial_cat)
        thisExp.addData('token', trial_token)
        cat_resp = cat_mouse_t.clicked_name[-1].split("_")[0]
        thisExp.addData('resp', cat_resp)
        thisExp.addData('corr', int(cat_resp === trial_cat))
        thisExp.addData('t_resp', round(cat_mouse_t.time[0],3))

        cat_list.append(trial_cat)
        resp_list.append(cat_resp)
        accuracy_dict[trial_cat].append(cat_resp == trial_cat)
  Routine train_instructions
    RoutineSettingsComponent train_instructions
      saveStartStop = False
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    CodeComponent full_screen_5
      Code Type = Both
      Each Frame:
        if frameN > 10:
            if not psychoJS.window._windowAlreadyInFullScreen:
                alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate")
                quitPsychoJS('',false)
      Each JS Frame:
        if (frameN > 10) {
            if (! psychoJS.window._windowAlreadyInFullScreen) {
            alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate");
            quitPsychoJS('',false);
            }
        }
    ImageComponent instruction_image_train
      image [set every repeat] = $train_slide
      saveStartStop = False
      size = (1.1, 0.62)
      startVal [time (s)] = 0.0
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    ImageComponent leftArrow
      image = img/leftarrow.png
      pos = arrowPos_back
      saveStartStop = False
      size = arrowSize
      startVal [time (s)] = 0.0
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    ImageComponent rightArrow
      image = img/rightarrow.png
      pos = arrowPos_next
      saveStartStop = False
      size = arrowSize
      startVal [time (s)] = 0.0
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    MouseComponent instruct_mouse_train
      clickable = leftArrow,rightArrow
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instruct_counter_train
      color = black
      letterHeight = 0.05
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(cur_row_train + 1) + '/' + str(max_slides_train + 1)
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  Routine test_instructions
    RoutineSettingsComponent test_instructions
      saveStartStop = False
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    CodeComponent full_screen_6
      Code Type = Both
      Each Frame:
        if frameN > 10:
            if not psychoJS.window._windowAlreadyInFullScreen:
                alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate")
                quitPsychoJS('',false)
      Each JS Frame:
        if (frameN > 10) {
            if (! psychoJS.window._windowAlreadyInFullScreen) {
            alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate");
            quitPsychoJS('',false);
            }
        }
    ImageComponent instruction_image_test
      image [set every repeat] = $test_slide
      saveStartStop = False
      size = (1.1, 0.62)
      startVal [time (s)] = 0.0
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    ImageComponent leftArrow_2
      image = img/leftarrow.png
      pos = arrowPos_back
      saveStartStop = False
      size = arrowSize
      startVal [time (s)] = 0.0
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    ImageComponent rightArrow_2
      image = img/rightarrow.png
      pos = arrowPos_next
      saveStartStop = False
      size = arrowSize
      startVal [time (s)] = 0.0
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    MouseComponent instruct_mouse_test
      clickable = leftArrow_2,rightArrow_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instruct_counter_test
      color = black
      letterHeight = 0.05
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(cur_row_test + 1) + '/' + str(max_slides_test + 1)
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  Routine test_instrPrep
    RoutineSettingsComponent test_instrPrep
      saveStartStop = False
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    CodeComponent instrPrecode_test
      Code Type = Auto->JS
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      Begin Experiment:
        cur_row_test = 0
        show_instructions_test = 1
        max_slides_test = 3 -1
      Begin Routine:
        if(instruct_mouse_test.isPressedIn(rightArrow_2)):
            cur_row_test += 1
        elif(instruct_mouse_test.isPressedIn(leftArrow_2)):
            cur_row_test -= 1

        if(cur_row_test < 0):
            cur_row_test = 0

        if(cur_row_test > max_slides_test):
            testInstructions_controller.finished = 1
            show_instructions_test = 0

            cur_row_test = max_slides_test - 1

        cur_row_test_string = str(cur_row_test)
  Routine fixation
    RoutineSettingsComponent fixation
      saveStartStop = False
      skipIf = ['TCN','TCR'].includes(expInfo['condition'])
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    CodeComponent full_screen_7
      Code Type = Both
      Each Frame:
        if frameN > 10:
            if not psychoJS.window._windowAlreadyInFullScreen:
                alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate.")
                quitPsychoJS('',false)
      Each JS Frame:
        if (frameN > 10) {
            if (! psychoJS.window._windowAlreadyInFullScreen) {
            alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate.");
            quitPsychoJS('',false);
            }
        }
    CodeComponent fix_end_code
      Code Type = Both
      Each Frame:
        if fix_circle.contains(fix_mouse):
            continueRoutine = False
      Each JS Frame:
        if (fix_circle.contains(fix_mouse)) {
            continueRoutine = false;
        }
    TextComponent fix_text
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = move your mouse to the dot at the center to continue
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    PolygonComponent fix_circle
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    MouseComponent fix_mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Selection_train
    RoutineSettingsComponent Selection_train
      saveStartStop = False
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    CodeComponent full_screen_8
      Code Type = Both
      Each Frame:
        if frameN > 10:
            if not psychoJS.window._windowAlreadyInFullScreen:
                alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate")
                quitPsychoJS('',false)
      Each JS Frame:
        if (frameN > 10) {
            if (! psychoJS.window._windowAlreadyInFullScreen) {
            alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate");
            quitPsychoJS('',false);
            }
        }
    CodeComponent rock_selection
      Code Type = Both
      Each Frame:
        for i_rock in range(num_rows*num_cols):
            MousePos = learn_mouse.getPos()
            rock = rock_grid[i_rock]
            rect = rock_rect_grid[i_rock]
            rockPos = rock.pos
            if eventfun.xydist(MousePos,rockPos) < max(rockSize)*.5:
                rock.size = [.15,.15]
                rect.lineColor = "red"
            else:
                rock.size = gridSize
                rect.lineColor = "black"
      Each JS Frame:
        MousePos = [];
        rock = [];
        rect = [];
        rockPos = [];
        for (var i_rock = 0; i_rock < num_rows * num_cols; i_rock++) {
            MousePos = learn_mouse.getPos();
            rock = rock_grid[i_rock];
            rockPos = rock.pos;
            if (EuclidDist(MousePos, rockPos) < Math.max(...gridSize) * 0.5) {
                rock.size = rockSize_large;
            } else {
                rock.size = gridSize;
            }
        }
      End JS Routine:
        aspectRatio_clicked = [];
        rock_clicked = [];
        filename_clicked = [];
        cat_clicked = [];
        token_clicked = [];
        row_clicked = [];
        col_clicked = [];
        for (var i_rock = 0; i_rock < num_rows * num_cols; i_rock++) {
            let rock = rock_grid[i_rock];
            let irow = rock_rows[i_rock];
            let icol = rock_cols[i_rock];
            let rock_fileInfo = grid_image_fileInfo[irow][icol];
            let rock_aspect_ratio = rock_fileInfo.size;
            let rock_filename = rock_fileInfo.name;
            let cat = extract_rock_info(rock_filename)["type"];
            let token = extract_rock_info(rock_filename)["token"];
            if (learn_mouse.isPressedIn(rock)) {
                aspectRatio_clicked = rock_aspect_ratio;
                rock_clicked = rock;
                filename_clicked = rock_filename;
                cat_clicked = cat;
                token_clicked = token;
                row_clicked = irow + 1;
                col_clicked = icol + 1;
            }
        }
      End Routine:
        irow = []
        icol = []
        rock_aspect_ratio = []
        rock_filename = []
        cat = []
        token = []
        aspectRatio_clicked = []
        rock_clicked = []
        filename_clicked = []
        cat_clicked = []
        token_clicked = []
        row_clicked = []
        col_clicked = []
        for i_rock in range(num_rows*num_cols):
            rock = rock_grid[i_rock]
            irow = rock_rows[i_rock]
            icol = rock_cols[i_rock]
            rock_aspect_ratio = rocks_orig_size[i_rock]
            rock_filename = grid_image_files[irow][icol]
            cat = extract_rock_info(rock_filename)["type"]
            token = extract_rock_info(rock_filename)["token"]
            if learn_mouse.isPressedIn(rock):
                aspectRatio_clicked = rock_aspect_ratio
                rock_clicked = rock
                filename_clicked = rock_filename
                cat_clicked = cat
                token_clicked = token
                row_clicked = irow + 1
                col_clicked = icol + 1
    CodeComponent draw_rock_grid
      Code Type = Both
      Begin JS Routine:
        trial_image_name = [];
        grid_image_fileName = [];
        for (var i_rock = 0; i_rock < num_rows * num_cols; i_rock++) {
            rock_rect = rock_rect_grid[i_rock];
            rock_image = rock_grid[i_rock];
            rock_image.setAutoDraw(true);
            if (expInfo["condition"] === 'SCR') {
                trial_image_name = train_block_images[train_trials.thisN].name;
                grid_image_fileName = rock_fileName_grid[i_rock];
                if (grid_image_fileName === trial_image_name) {
                    rock_rect.setAutoDraw(true);
                }
            }
        }
      Begin Routine:
        for i_rock in range(num_rows * num_cols):
            rock_rect = rock_rect_grid[i_rock]
            rock_image = rock_grid[i_rock]
            rock_image.setAutoDraw(True)
            if expInfo['condition'] == 'SCR':
                trial_image = train_block_images[train_trials.thisN]
                if trial_image.name in rock_image.image:
                    rock_rect.setAutoDraw(True)
      End JS Routine:
        for (var i_rock = 0; i_rock < num_rows * num_cols; i_rock++) {
            rock_rect = rock_rect_grid[i_rock];
            rock_image = rock_grid[i_rock];
            rock_image.setAutoDraw(false);
            if (expInfo["condition"] === 'SCR') {
                trial_image_name = train_block_images[train_trials.thisN].name;
                grid_image_fileName = rock_fileName_grid[i_rock];
                if (grid_image_fileName === trial_image_name) {
                    rock_rect.setAutoDraw(false);
                }
            }
        }

        //cat = extract_rock_info(trial_image_name)["type"];
        //token = extract_rock_info(trial_image_name)["token"];
        //console.log(trial_image_name, cat, token);
      End Routine:
        for i_rock in range(num_rows * num_cols):
            rock_rect = rock_rect_grid[i_rock]
            rock_image = rock_grid[i_rock]
            rock_image.setAutoDraw(False)
            if expInfo['condition'] == 'SCR':
                trial_image = train_block_images[train_trials.thisN]
                if trial_image.name in rock_image.image:
                    rock_rect.setAutoDraw(False)
    CodeComponent draw_color_gradient
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        color_gradient = visual.ImageStim(
                win=win,
                name='color_gradient',
                image='img/color_gradient.png', mask=None, anchor='center',
                ori=0.0, pos=(0.68, 0), size=(0.16, 0.8),
                color='white', colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=-3.0)
      Begin Routine:
        if blocks.thisN > 0:
            color_gradient.setAutoDraw(True)
      End Routine:
        if blocks.thisN > 0:
            color_gradient.setAutoDraw(False)
    TextComponent rock_grid_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Click on the rock you want to study next
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    MouseComponent learn_mouse
      clickable = ...rock_grid
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    CodeComponent store_trial_vars_train
      Code Type = Both
      Begin JS Routine:
        psychoJS.experiment.addData("block", (blocks.thisN + 1));
        psychoJS.experiment.addData("phase", 1);
        psychoJS.experiment.addData("trial", (train_trials.thisN + 1));
      Begin Routine:
        thisExp.addData('block', blocks.thisN + 1)
        thisExp.addData('phase', 1)
        thisExp.addData('trial', train_trials.thisN + 1)
      End JS Routine:
        cat_clicked_num = category_names.findIndex(cat => cat === cat_clicked) + 1;
        psychoJS.experiment.addData("cat", cat_clicked_num);
        psychoJS.experiment.addData("token", token_clicked);
        psychoJS.experiment.addData("row", row_clicked);
        psychoJS.experiment.addData("col", col_clicked);
        psychoJS.experiment.addData("t_select", util.round(learn_mouse.time[0], 3));
        if (expInfo["condition"] === 'SCR'){
            cat_rec = extract_rock_info(trial_image_name)["type"];
            cat_rec_num = category_names.findIndex(cat => cat === cat_rec) + 1;
            token_rec = extract_rock_info(trial_image_name)["token"];
            psychoJS.experiment.addData("cat_rec", cat_rec_num);
            psychoJS.experiment.addData("token_rec", token_rec);
        }
      End Routine:
        thisExp.addData('cat', cat_clicked)
        thisExp.addData('token', token_clicked)
        thisExp.addData('row', row_clicked)
        thisExp.addData('col', col_clicked)
        thisExp.addData('t_select', round(learn_mouse.time[0],3))
        if expInfo["condition"] == 'SCR':
            rock_info = extract_rock_info(trial_image_name)
            cat_rec = rock_info["type"]
            cat_rec_num = category_names.index(cat_rec) + 1
            token_rec = rock_info["token"]
            psychoJS.experiment.addData("cat_rec", cat_rec_num)
            psychoJS.experiment.addData("token_rec", token_rec)
  Routine Sampling_train
    RoutineSettingsComponent Sampling_train
      saveStartStop = False
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    CodeComponent full_screen_9
      Code Type = Both
      Each Frame:
        if frameN > 10:
            if not psychoJS.window._windowAlreadyInFullScreen:
                alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate")
                quitPsychoJS('',false)
      Each JS Frame:
        if (frameN > 10) {
            if (! psychoJS.window._windowAlreadyInFullScreen) {
            alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate");
            quitPsychoJS('',false);
            }
        }
    CodeComponent draw_rock_grid_2
      Code Type = Both
      Begin JS Routine:
        for (let rock_image of rock_grid) {
            rock_image.setAutoDraw(true);
        }
      Begin Routine:
        for rock_image in rock_grid:
            rock_image.setAutoDraw(True)
      End JS Routine:
        for (let rock_image of rock_grid) {
            rock_image.setAutoDraw(false);
        }
      End Routine:
        for rock_image in rock_grid:
            rock_image.setAutoDraw(False)
    CodeComponent prompt_mouseover
      Code Type = Both
      Each Frame:
        if rock_grid_rect_2.contains(learn_mouse_2):
                rock_grid_text_color = 'red'
                rock_grid_rect_color = 'red'
            else:
                rock_grid_text_color = 'black'
                rock_grid_rect_color = 'black'
      Each JS Frame:
        if (rock_grid_rect_2.contains(learn_mouse_2)) {
                rock_grid_text_color = 'red';
                rock_grid_rect_color = 'red';
            } else {
                rock_grid_text_color = 'black';
                rock_grid_rect_color = 'black';
            }
    PolygonComponent rock_grid_rect_2
      fillColor = white
      lineColor [set every frame] = $rock_grid_rect_color
      lineWidth = 2
      shape = rectangle
      size = (0.42, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent rock_grid_text_2
      color [set every frame] = $rock_grid_text_color
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Click here to continue
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    CodeComponent extract_trial_rock_info
      Code Type = Both
      End JS Routine:
        trial_image = train_block_images[train_trials.thisN];
        trial_rock_info = extract_rock_info(trial_image.name);
        trial_cat = trial_rock_info["type"];
        trial_token = trial_rock_info["token"];
        [rock_width, rock_height] = trial_image.size;

        trial_rock_file = trial_image.name;
        trial_rock_cat = trial_cat;
      End Routine:
        trial_image = train_block_images[train_trials.thisN]
        trial_cat = extract_rock_info(trial_image)["type"]
        trial_token = extract_rock_info(trial_image)["token"]
        rock_width,rock_height = trial_rock_train.aspectRatio

        trial_rock_file = trial_image
        trial_rock_cat = trial_cat
        rock_width,rock_height = trial_rock_test.aspectRatio
    MouseComponent learn_mouse_2
      clickable = rock_grid_rect_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    CodeComponent store_trial_vars_train_2
      Code Type = Both
      Begin JS Routine:
        psychoJS.experiment.addData("block", (blocks.thisN + 1));
        psychoJS.experiment.addData("phase", 1);
        psychoJS.experiment.addData("trial", (train_trials.thisN + 1));
      Begin Routine:
        thisExp.addData('block', blocks.thisN + 1)
        thisExp.addData('phase', 1)
        thisExp.addData('trial', train_trials.thisN + 1)
      End JS Routine:
        trial_cat_num = category_names.findIndex(element => element === trial_cat) + 1;
        psychoJS.experiment.addData("cat", trial_cat_num);
        psychoJS.experiment.addData("token", trial_token);
        psychoJS.experiment.addData("row", (- 1));
        psychoJS.experiment.addData("col", (- 1));
        psychoJS.experiment.addData("t_select", util.round(learn_mouse_2.time[0], 3));
      End Routine:
        thisExp.addData('cat', trial_cat)
        thisExp.addData('token', trial_token)
        thisExp.addData('row', -1)
        thisExp.addData('col', -1)
        thisExp.addData('t_select', round(learn_mouse_2.time[0],3))
  Routine debrief
    RoutineSettingsComponent debrief
      saveStartStop = False
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    ImageComponent debrief_report
      image = Instructions/debrief.png
      size = (1.4, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent next_end_expt
      image = img/next.png
      pos = (0, -0.4)
      saveStartStop = False
      size = next_buttonSize
      startVal [time (s)] = 0
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    MouseComponent next_mouse_end_expt
      clickable = next_end_expt
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0
      syncScreenRefresh = True
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    CodeComponent end_expt_var
      Code Type = JS
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      Before JS Experiment:
        let end_message = " After you click \"ok\", you will be redirected to a short survey.";
        let incomplete_url = "https://app.prolific.com/submissions/complete?cc=C15JKIPY";
      End JS Experiment:
        let complete_url = "https://iu.co1.qualtrics.com/jfe/form/SV_cBXYDpPQBCfKI2G?participant=" + expInfo["participant"] + "&condition=" + expInfo["condition"] + "&bonus=" + hasBonus;
        psychoJS.setRedirectUrls(complete_url, incomplete_url);
  Routine expt_setup
    RoutineSettingsComponent expt_setup
      saveStartStop = False
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    CodeComponent function_def
      Code Type = JS
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      Before JS Experiment:
        function isUpper(str) {return /^[A-Z]+$/.test(str); }
        function isLower(str) {return /^[a-z]+$/.test(str); }
        function reshapeArray(flatArray, dimensions) {
            function reshape(currentArray, dims) {
                if (dims.length === 1) {
                    return currentArray.splice(0, dims[0]);
                }

                let result = [];
                for (let i = 0; i < dims[0]; i++) {
                    result.push(reshape([...currentArray], dims.slice(1)));
                    currentArray.splice(0, dims[1]);
                }
                return result;
            }

            return reshape([...flatArray], dimensions);
        }
        function ArraySize(arr) {
            let dimensions = [];

            while(Array.isArray(arr)) {
                dimensions.push(arr.length);
                arr = arr[0];
            }

            return dimensions;
        }
        function shuffleListElement(nestedList) {
            const flatList = nestedList.flat(Infinity);
            for (let i = flatList.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [flatList[i], flatList[j]] = [flatList[j], flatList[i]];
            }
            return reshapeArray(flatList, ArraySize(nestedList));
        }
        function getRandomSample(list, numSamples) {
          let sample_list = [];
          let tempList = [...list];
          for (let i = 0; i < numSamples; i++) {
            // If the temporary list is exhausted, refill and shuffle it
            if (tempList.length === 0) {
              tempList = [...list];
              shuffleListElement(tempList);
            }
            // Pick an element and remove it from the temporary array
            const randomIndex = Math.floor(Math.random() * tempList.length);
            sample_list.push(tempList.splice(randomIndex, 1)[0]);
          }
          return sample_list;
        }

        function extract_rock_info(fileName) {
            var rock_type,token,rock_info;
            rock_type = fileName.split("_")[1];
            token = fileName.split(".")[0].split("_").slice((- 1))[0];
            if (isUpper(rock_type[0]) && isLower(rock_type.slice(1)) && !isNaN(token)) {
                rock_info = {"type": rock_type, "token": token};
                return rock_info;
            }
            return null;
        }

        function EuclidDist(p1, p2) {
          let sum = 0;
          for (let i = 0; i < p1.length; i++) {
            sum += Math.pow((p2[i] - p1[i]), 2);
          }
          return Math.sqrt(sum);
        }
        //function standardize(xlist) {
        //    var n_elem, ylist;
        //    n_elem = xlist.length;
        //    for (var i, _pj_c = 0, _pj_a = util.range(n_elem), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
        //        i = _pj_a[_pj_c];
        //        ylist.push(((xlist[i] - Math.min(...xlist)) / (Math.max(...xlist) - Math.min(...xlist))));
        //    }
        //    return ylist;
        //}
        function prop_to_count(proportions, target_sum) {
            var current_sum, current_diff, target_values, current_values, maxIterations, iteration;
            target_values = proportions.map(prop => prop * target_sum);
            current_values = target_values.map(value => util.round(value));
            current_sum = util.sum(current_values);
            current_diff = target_values.map((num, index) => num - current_values[index]);
            maxIterations = 1000; // Set a maximum number of iterations to prevent infinite loop
            iteration = 0;
            function findRandomIndexOfExtreme(list, extremeFunc) {
              const extremeVal = extremeFunc(...list);
              const extremeIndices = list
                  .map((value, index) => value === extremeVal ? index : -1)
                  .filter(index => index !== -1);
              return extremeIndices[Math.floor(Math.random() * extremeIndices.length)];
            };

            while (current_sum !== target_sum && iteration < maxIterations) {
                    while (current_sum > target_sum){
                        let i = findRandomIndexOfExtreme(current_diff, Math.min);
                        current_values[i] -= 1;
                        current_diff[i] += 1;
                        current_sum -= 1;
                    }
                    while (current_sum < target_sum){
                        let i = findRandomIndexOfExtreme(current_diff, Math.max);
                        current_values[i] += 1;
                        current_diff[i] -= 1;
                        current_sum += 1;
                    }
                }
                iteration++;
            return current_values;
        };
        //function ComputePredictAccuracy(train_dict, probe_dict, stim_dict) {
        //    var corr_cat, probe_coord, probes_pred_corr, train_plus_stim_dict, sum_sim_corr, sum_sim_total, train_cat, train_coord, train_dist;
        //    probes_pred_corr = [];
        //    for (var j = 0; j < probe_dict.length; j++) {
        //        j = _pj_a[_pj_c];
        //        probe_coord = probe_dict[j].coord;
        //        corr_cat = probe_dict[j].cat;
        //        sum_sim_corr = 0;
        //        sum_sim_total = 0;
        //        train_plus_stim_dict = train_dict.concat(stim_dict);//assumes the length of stim_dict to be 1
        //        for (var i = 0; i < train_plus_stim_dict.length; i++) {
        //            train_coord = train_plus_stim_dict[i].coord;
        //            train_dist = EuclidDist(train_coord, probe_coord);
        //            train_cat = train_plus_stim_dict[i].cat;
        //            sum_sim_total += Math.exp((- train_dist));
        //            if ((train_cat === corr_cat)) {
        //                sum_sim_corr += Math.exp((- train_dist));
        //            }
        //        }
        //        probes_pred_corr.push((sum_sim_corr / sum_sim_total));
        //    }
        //    return util.average(probes_pred_corr);
        //}

        function partitionList(originalList, separatePairs) {
            const separateNumbers = [...new Set(separatePairs.flat())];
            var filteredList, partition;
            filteredList = originalList.filter(n => !separateNumbers.includes(n));
            partitions = [[], []];
            separatePairs.forEach(pair => {
                if (Math.random() < 0.5) {
                    partitions[0].push(pair[0]);
                    partitions[1].push(pair[1]);
                } else {
                    partitions[0].push(pair[1]);
                    partitions[1].push(pair[0]);
                }
            });
            filteredList = shuffleListElement(filteredList);
            filteredList.forEach((num, i) => {
                partitions[i % 2].push(num);
            });

            return partitions;
        }
      Begin JS Experiment:
        next_buttonSize = [0.24, 0.08];
    CodeComponent def_rock_params
      Code Type = Both
      Begin Experiment:
        # define experiment parameters
        gridSize = (0.11,0.11)
        gridSize_large = [dim * 1.3 for dim in gridSize]
        rockSize_large = [dim * 1.2 for dim in rockSize]
        category_names = ["Andesite", "Basalt", "Diorite", "Gabbro", "Obsidian", "Pegmatite", "Peridotite", "Pumice"]
        substring_map = {
            'Basalt': [('14', '16')],
            'Gabbro': [('03', '12'), ('14', '15')],
            'Pegmatite': [('09', '10')]
        }
        num_cats = len(category_names)
        nblock = 9
        num_rows = 6
        num_cols = num_cats

        # define grid display parameters
        x_bound = (-.55,.55)
        y_bound = (-.39,.39)
        y_padding = 0.02
        grid_image_pos = []
        for irow in range(num_rows):
            grid_image_row = []
            for icol in  range(num_cols):
                x_pos = x_bound[0] + icol * (x_bound[1] - x_bound[0])/(num_cols - 1)
                y_pos = y_bound[0] + irow * (y_bound[1] - y_bound[0])/(num_rows - 1)
                if y_pos > 0:
                    y_pos = y_pos + y_padding
                else:
                    y_pos = y_pos - y_padding
                grid_image_row.append([x_pos,y_pos])
            grid_image_pos.append(grid_image_row)
      Begin JS Experiment:
        // define experiment parameters
        gridSize = [0.11,0.11];
        gridSize_large = gridSize.map(element => element * 1.3);
        rockSize_large = gridSize.map(element => element * 1.2);
        category_names = ["Andesite", "Basalt", "Diorite", "Gabbro", "Obsidian", "Pegmatite", "Peridotite", "Pumice"];
        substring_map = {
            'Basalt': [['14', '16']],
            'Gabbro': [['03', '12'], ['14', '15']],
            'Pegmatite': [['09', '10']]
        };
        num_cats = category_names.length;
        nblock = 9;
        num_rows = 6;
        num_cols = num_cats;

        // define grid display parameters
        x_bound = [(- 0.55), 0.55];
        y_bound = [(- 0.39), 0.39];
        y_padding = 0.02;
        grid_image_pos = [];
        grid_image_row = [];
        x_pos = [];
        y_pos = [];
        for (var irow = 0; irow< num_rows; irow++) {
            grid_image_row = [];
            for (var icol = 0; icol< num_cols; icol++) {
                x_pos = (x_bound[0] + ((icol * (x_bound[1] - x_bound[0])) / (num_cols - 1)));
                y_pos = (y_bound[0] + ((irow * (y_bound[1] - y_bound[0])) / (num_rows - 1)));
                if (y_pos > 0){
                    y_pos = y_pos + y_padding}
                else{
                    y_pos = y_pos - y_padding};
                grid_image_row.push([x_pos, y_pos]);
            }
            grid_image_pos.push(grid_image_row);
        }
      Begin JS Routine:
        // partition token indices into training and test sets
        cat_token_index_train = [];
        cat_token_index_test = [];
        file_names = rockInfo_dict.map(file => file.name);


        for (let cat_name of category_names) {
            let file_names_cat = file_names.filter(file => file.includes(cat_name));
            let separatePairs = [];

            if (substring_map[cat_name]) {
                for (let substring of substring_map[cat_name]) {
                    let rockIndex = [null, null];
                    rockIndex[0] = file_names_cat.map((file, index) => file.includes(substring[0]) ? index : null).filter(index => index !== null)[0];
                    rockIndex[1] = file_names_cat.map((file, index) => file.includes(substring[1]) ? index : null).filter(index => index !== null)[0];
                    separatePairs.push(rockIndex);
                }
            }

            let indexList = Array.from({length: 12}, (_, index) => index);
            const [part1, part2] = partitionList(indexList, separatePairs); // Assuming partitionList function is defined

            cat_token_index_train.push(part1);
            cat_token_index_test.push(part2);
        }
        //console.log('cat_token_index_train:',cat_token_index_train);
        //console.log('cat_token_index_test:',cat_token_index_test);

        // define grid image files
        image_fileInfo_dict_ordered = [];
        cat_name =[];
        token_idx=[];
        for (var irow = 0; irow < num_rows; irow++) {
            let row_image_fileInfo = [];
            for (var icat = 0; icat < num_cats; icat++) {
                cat_name = category_names[icat];
                let rockInfo_dict_cat = rockInfo_dict.filter(file => file.name.includes(cat_name));
                token_idx = cat_token_index_train[icat][irow];
                row_image_fileInfo.push(rockInfo_dict_cat[token_idx]);
            }
            image_fileInfo_dict_ordered.push(row_image_fileInfo);
        }
        grid_image_fileInfo = shuffleListElement(image_fileInfo_dict_ordered);
      Begin Routine:
        # partition token indices into training and test sets
        cat_token_index_train = []
        cat_token_index_test = []
        for cat_name in category_names:
            file_names_cat = [file.name for file in rockInfo_dict if cat_name in file.name]
            separatePairs = []
            if cat_name in substring_map:
                for substrings in substring_map[cat_name]:
                    rockIndex = [None, None]
                    rockIndex[0] = [index for index, file in enumerate(file_names_cat) if substrings[0] in file.name]
                    rockIndex[1] = [index for index, file in enumerate(file_names_cat) if substrings[1] in file.name]
                    separatePairs.append(rockIndex)

            IndexList = list(range(12))
            [part1, part2] = partitionList(IndexList, separatePairs)
            cat_token_index_train.append(part1)
            cat_token_index_test.append(part2)

        # define grid image files
        image_files_ordered = []
        for irow in range(num_rows):
            row_image_files = []
            for icat in range(num_cats):
                cat_name = category_names[icat]
                rockInfo_dict_cat = [file for file in rockInfo_dict if cat_name in file.name]
                token_idx = cat_token_index_train[icat][irow]
                row_image_files.append(rockInfo_dict_cat[token_idx])
            image_files_ordered.append(row_image_files)

        grid_image_files = shuffle_nested_list(image_files_ordered)
    CodeComponent def_rock_grid
      Code Type = Both
      Begin JS Routine:
        rock_grid = [];
        rock_rect_grid = [];
        rock_fileName_grid = [];
        rock_info_grid = [];
        rock_cat_num = [];
        rock_token = [];
        rock_rows = [];
        rock_cols = [];
        rock_pos = [];
        image_fileInfo = [];
        image_fileName = [];
        rock_info = [];
        rock_name = [];
        rock_rect_name = [];
        rock_image = [];
        rock_rect = [];
        for (var irow = 0; irow < num_rows; irow++) {
            for (var icol = 0; icol < num_cols; icol++) {
                rock_pos = grid_image_pos[irow][icol];
                image_fileInfo = grid_image_fileInfo[irow][icol];
                image_fileName = image_fileInfo.name;
                rock_info = extract_rock_info(image_fileName);
                rock_name = ((rock_info.type + "_") + rock_info.token);
                rock_rect_name = ((rock_name + "_") + "rect");
                rock_image = new visual.ImageStim({"win": psychoJS.window, "name": rock_name, "image": ((directory_path + "/") + image_fileName), "mask": null, "anchor": "center", "ori": 0.0, "pos": rock_pos, "size": gridSize, "color": [1, 1, 1], "colorSpace": "rgb", "opacity": null, "flipHoriz": false, "flipVert": false, "texRes": 128.0, "interpolate": true, "depth": (- 1.0)});
                rock_rect = new visual.TextBox({"win": psychoJS.window, "name": rock_rect_name, "text": '', "placeholder": 'Type here...', "font": 'Arial', "pos": rock_pos, "letterHeight": 0, "lineSpacing": 1.0, "size": gridSize_large, "units": undefined, "color": null, "colorSpace": 'rgb', "fillColor": null, "borderColor": "black", "borderWidth": 0.008, "languageStyle": 'LTR', "bold": false, "italic": false, "opacity": 1, "padding": 0.0, "alignment": 'center', "overflow": 'visible', "editable": false, "multiline": true, "anchor": 'center', "depth": (-5.0)});
                rock_grid.push(rock_image);
                rock_rect_grid.push(rock_rect);
                rock_fileName_grid.push(image_fileName);
                rock_rows.push(irow);
                rock_cols.push(icol);
                // save rock info for data export
                rock_cat_num = category_names.findIndex(cat => cat === rock_info.type) + 1;
                rock_token = rock_info.token;
                rock_info_grid.push({row:irow+1, col:icol+1, cat:rock_cat_num, token:rock_token});
            }
        }
      Begin Routine:
        rock_grid = []
        rock_rect_grid = []
        rock_rows = []
        rock_cols = []
        rock_pos = []
        image_file = []
        rock_info = []
        rock_name = []
        rock_rect_name = []
        rock_image = []
        rock_rect = []
        for irow in range(num_rows):
            for icol in range(num_cols):
                rock_pos = grid_image_pos[irow][icol]
                image_file = grid_image_files[irow][icol]
                rock_info = extract_rock_info(image_file)
                rock_name = rock_info["type"] + "_" + rock_info["token"]
                rock_rect_name = rock_name + "_" + "rect"
                rock_image = visual.ImageStim(
                                win=win,
                                name=rock_name,
                                image=directory_path+'/'+image_file, mask=None, anchor='center',
                                ori=0.0, pos=rock_pos, size = gridSize,
                                color=[1,1,1], colorSpace='rgb', opacity=None,
                                flipHoriz=False, flipVert=False,
                                texRes=128.0, interpolate=True, depth=-1.0)
                rock_rect = visual.Rect(
                                win=win, name=rock_rect_name,
                                width=0.15, height=0.15,
                                ori=0.0, pos=rock_pos, anchor='center',
                                lineWidth=4.0, colorSpace='rgb', lineColor=[0.5,0.5,0], fillColor=None,
                                opacity=1, depth=-5.0, interpolate=True)
                rock_grid.append(rock_image)
                rock_rect_grid.append(rock_rect)
                rock_rows.append(irow)
                rock_cols.append(icol)
      End JS Experiment:
        if (typeof rock_info_grid !== 'undefined'){
        psychoJS.experiment.nextEntry();
            for (let rock_index = 0; rock_index < rock_info_grid.length; rock_index++) {
                let row = rock_info_grid[rock_index];
                for (let key in row) {
                    psychoJS.experiment.addData(key, row[key]);
                }
                psychoJS.experiment.nextEntry();
            }
        }
    CodeComponent sample_rocks_train
      Code Type = Both
      Begin JS Routine:
        if (['TCR','TCN','SCR'].includes(expInfo["condition"])){
            logical_order = [];
            permutation = [];
            logical_cat=[];
            for (var icat = 0; icat < num_cats; icat++) {
                logical_cat = [];
                for (var irep = 0; irep < 3; irep++) {
                    permutation = shuffleListElement(util.range(num_rows));
                    logical_cat.push(...permutation);
                }
                logical_order.push(logical_cat);
            }
            train_images = [];
            seq_idx = [];
            block_images = [];
            file_names_cat = [];
            logical_idx1 = [];
            logical_idx2 = [];
            tokens_idx1 = [];
            tokens_idx2 = [];
            for (var iblock = 0; iblock < nblock; iblock++) {
                seq_idx = [];
                seq_idx.push((iblock * 2));
                seq_idx.push(((iblock * 2) + 1));
                block_images = [];
                for (var icat = 0; icat < num_cats; icat++) {
                    logical_idx1 = logical_order[icat][seq_idx[0]];
                    logical_idx2 = logical_order[icat][seq_idx[1]];
                    cat_name = category_names[icat];
                    let rockInfo_dict_cat = rockInfo_dict.filter(file => file.name.includes(cat_name));
                    tokens_idx1 = cat_token_index_train[icat][logical_idx1];
                    tokens_idx2 = cat_token_index_train[icat][logical_idx2];
                    block_images.push(rockInfo_dict_cat[tokens_idx1]);
                    block_images.push(rockInfo_dict_cat[tokens_idx2]);
                }
                block_images = shuffleListElement(block_images);
                train_images.push(block_images);
            }
        }
      Begin Routine:
        if expInfo['condition'] in ['TCR', 'TCN', 'SCR']:
            logical_order = []
            for icat in range(num_cats):
                logical_cat = []
                for irep in range(3):
                    permutation = np.random.permutation(num_rows)
                    logical_cat.extend(permutation)
            logical_order.append(logical_cat)

            train_images = []
            for iblock in range(nblock):
                seq_idx = []
                seq_idx.append(iblock*2)
                seq_idx.append(iblock*2 + 1)
                block_images = []
                for icat in range(num_cats):
                    logical_idx1 = logical_order[icat][seq_idx[0]]
                    logical_idx2 = logical_order[icat][seq_idx[1]]
                    cat_name = category_names[icat]
                    file_names_cat = [item for item in file_names if cat_name in item]
                    tokens_idx1 = cat_token_index_train[icat][logical_idx1]
                    tokens_idx2 = cat_token_index_train[icat][logical_idx2]
                    block_images.append(file_names_cat[tokens_idx1])
                    block_images.append(file_names_cat[tokens_idx2])
                block_images = shuffleListElement(block_images)
                train_images.append(block_images)
    CodeComponent sample_rocks_test
      Code Type = Both
      Begin JS Routine:
        logical_order = [];
        permutation = [];
        logical_cat=[];
        for (var icat = 0; icat < num_cats; icat++) {
            logical_cat = [];
            for (var irep = 0; irep < 3; irep++) {
                permutation = shuffleListElement(util.range(num_rows));
                logical_cat.push(...permutation);
            }
            logical_order.push(logical_cat);
        }
        test_images = [];
        seq_idx = [];
        block_images = [];
        logical_idx1 = [];
        logical_idx2 = [];
        tokens_idx1 = [];
        tokens_idx2 = [];
        for (var iblock = 0; iblock < nblock; iblock++) {
            seq_idx = [];
            seq_idx.push((iblock * 2));
            seq_idx.push(((iblock * 2) + 1));
            block_images = [];
            for (var icat = 0; icat < num_cats; icat++) {
                logical_idx1 = logical_order[icat][seq_idx[0]];
                logical_idx2 = logical_order[icat][seq_idx[1]];
                cat_name = category_names[icat];
                let rockInfo_dict_cat = rockInfo_dict.filter(file => file.name.includes(cat_name));
                tokens_idx1 = cat_token_index_test[icat][logical_idx1];
                tokens_idx2 = cat_token_index_test[icat][logical_idx2];
                block_images.push(rockInfo_dict_cat[tokens_idx1]);
                block_images.push(rockInfo_dict_cat[tokens_idx2]);
            }
            block_images = shuffleListElement(block_images);
            test_images.push(block_images);
        }
      Begin Routine:
        logical_order = []
        for _ in range(num_cats):
            logical_cat = []
            for _ in range(3):
                permutation = np.random.permutation(num_rows)
                logical_cat.extend(permutation)
            logical_order.append(logical_cat)

        test_images = []
        for iblock in range(nblock):
            seq_idx = []
            seq_idx.append(iblock*2)
            seq_idx.append(iblock*2 + 1)
            block_images = []
            for icat in range(num_cats):
                logical_idx1 = logical_order[icat][seq_idx[0]]
                logical_idx2 = logical_order[icat][seq_idx[1]]
                cat_name = category_names[icat]
                file_names_cat = [item for item in file_names if cat_name in item]
                tokens_idx1 = cat_token_index_test[icat][logical_idx1]
                tokens_idx2 = cat_token_index_test[icat][logical_idx2]
                block_images.append(file_names_cat[tokens_idx1])
                block_images.append(file_names_cat[tokens_idx2])
            block_images = shuffleListElement(block_images)
            test_images.append(block_images)
  Routine load_image_info
    RoutineSettingsComponent load_image_info
      saveStartStop = False
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    CodeComponent read_file_info
      Code Type = JS
      Begin JS Experiment:
        directory_path = "rock_images";
        rockInfo_dict = [];
      Begin JS Routine:
        rockInfo_dict.push({'name':file_name,'size':[width,height]});
  Routine condition_switch
    RoutineSettingsComponent condition_switch
      saveStartStop = False
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    CodeComponent select_cond
      Code Type = Both
      Begin JS Routine:
        if (['TCN','TCR'].includes(expInfo['condition'])) {
            nrep_sampling = 1;
            nrep_selection = 0;
        } else if (['SCN','SCR'].includes(expInfo['condition'])) {
            nrep_sampling = 0;
            nrep_selection = 1;
        }
      Begin Routine:
        if expInfo['condition'] in ['TCN','TCR']:
            nrep_sampling = 1
            nrep_selection = 0
        elif expInfo['condition'] in ['SCN','SCR']:
            nrep_sampling = 0
            nrep_selection = 1
  Routine end_of_trainingProcess
    RoutineSettingsComponent end_of_trainingProcess
      saveStartStop = False
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    CodeComponent testInstr_skip
      Code Type = Auto->JS
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      Begin Routine:
        if blocks.thisN == 0:
            testInstr_nrep = 9999
        else:
            testInstr_nrep = 0
  Routine start_of_trainingProcess
    RoutineSettingsComponent start_of_trainingProcess
      saveStartStop = False
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    CodeComponent full_screen_10
      Code Type = Both
      Each Frame:
        if frameN > 10:
            if not psychoJS.window._windowAlreadyInFullScreen:
                alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate")
                quitPsychoJS('',false)
      Each JS Frame:
        if (frameN > 10) {
            if (! psychoJS.window._windowAlreadyInFullScreen) {
            alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate");
            quitPsychoJS('',false);
            }
        }
    TextComponent block_prompt_train
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'Starting Training Block ' + str(blocks.thisN + 1) +  ' of ' + str(blocks.nTotal)
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    CodeComponent adjust_rocks_train_block
      Code Type = Both
      Begin JS Routine:
        train_block_images = [];
        if (['SCR','TCR'].includes(expInfo['condition'])) {
            if ((blocks.thisN === 0)) {
                train_block_images = train_images[blocks.thisN];
            } else {
                let train_images_flat = train_images.flat();
                let prc_list_thisblock = Object.values(prc_dict_thisblock);
                let num_items_cats = prop_to_count(prc_list_thisblock, (2 * num_cats));
                for (let icat = 0; icat < num_cats; icat++) {
                    let cat_name = category_names[icat];
                    let train_images_cat = train_images_flat.filter(file => file.name.includes(cat_name));
                    let train_images_cat_sampled = getRandomSample(train_images_cat, num_items_cats[icat]);
                    train_block_images.push(...train_images_cat_sampled);
                }
                train_block_images = shuffleListElement(train_block_images);
            }
        } else if (expInfo['condition'] === 'TCN'){
            train_block_images = train_images[blocks.thisN];
        }
      Begin Routine:
        if expInfo['condition'] in ['SCR', 'TCR']:
            train_block_images = []
            if blocks.thisN == 0:
                train_block_images = train_images[blocks.thisN]
            else:
                prc_list_thisblock = list(prc_dict_thisblock.values())
                num_items_cats = prop_to_count(prc_list_thisblock,2*num_cats)
                cat_name = []
                file_namesizes_cat = []
                file_sampled_cat = []
                for icat in range(num_cats):
                    cat_name = category_names[icat]
                    file_namesizes_cat = [file for file in file_namesizes if cat_name in file.name]
                    file_sampled_cat = getRandomSample(file_namesizes_cat,num_items_cats[icat])
                    train_block_images.extend(file_sampled_cat)
                train_block_images = shuffleListElement(train_block_images)
        elif expInfo['condition'] === 'TCN':
            train_block_images = train_images[blocks.thisN]
    CodeComponent config_rock_grid
      Code Type = JS
      disabled = True
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      Begin JS Routine:
        cat_rock = [];
        color_val = [];
        color_rgb = [];
        color_min = [-1, 1, -1];
        color_max = [1, -1, -1];
        if ((expInfo["condition"] === "SCN" && blocks.thisN > 0)) {
            for (var i; i < num_rows * num_cols; i++) {
                cat_rock = rock_info_grid[i].type;
                color_val = diff_dict_block[cat_rock];
                if (color_val !== null){
                  color_rgb = util.range(3).map(i => color_min[i] + color_val * (color_max[i] - color_min[i]));
                  rock_rect_grid[i].borderColor = color_rgb;
                }
            }
        }
  Routine end_of_testProcess
    RoutineSettingsComponent end_of_testProcess
      saveStartStop = False
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    CodeComponent full_screen_11
      Code Type = Both
      Each Frame:
        if frameN > 10:
            if not psychoJS.window._windowAlreadyInFullScreen:
                alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate")
                quitPsychoJS('',false)
      Each JS Frame:
        if (frameN > 10) {
            if (! psychoJS.window._windowAlreadyInFullScreen) {
            alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate");
            quitPsychoJS('',false);
            }
        }
    CodeComponent format_accuracy_summary
      Code Type = Both
      Begin Experiment:
        prc_corr_block_last3 = []
      Begin JS Experiment:
        prc_corr_block_last3 = [];
      Begin JS Routine:
        prc_corr = [];
        corr_table = "";
        for (let cat_name of category_names) {
            prc_corr = util.round(util.average(accuracy_dict[cat_name]) * 100);
            corr_table = corr_table + cat_name + ": " + prc_corr.toString() + "%\n\n";
        };
        prc_corr_list = Object.values(accuracy_dict).flat();
        prc_corr_block = util.round(util.average(prc_corr_list) * 100);
        corr_overall = 'You got ' + prc_corr_block.toString() + '% of trials correct.';

        if (blocks.thisN >= blocks.nTotal - 3){
            prc_corr_block_last3.push(prc_corr_block);
        }
        if (blocks.thisN === blocks.nTotal - 1){
            prc_corr_total_last3 = util.average(prc_corr_block_last3);
            hasBonus = (prc_corr_total_last3/100 >= 0.65)? 1: 0;
        }

        psychoJS.experiment.addData("Bonus", hasBonus);
      Begin Routine:
        prc_corr = [];
        corr_table = "";
        for cat_name in category_names:
            prc_corr = round(average(accuracy_dict[cat_name])*100)
            corr_table = corr_table + cat_name + ': ' + str(prc_corr) + '%\n\n'
        prc_corr_list = list(accuracy_dict.values())
        prc_corr_block = round(average(prc_corr_list)*100)
        corr_overall = 'you got ' + str(prc_corr_block) + '% of trials correct.'

        if blocks.thisN >= blocks.nTotal - 3:
            prc_corr_block_last3.append(prc_corr_block)
        if blocks.thisN == blocks.nTotal - 1:
            prc_corr_total_last3 = sum(prc_corr_block_last3) / len(prc_corr_block_last3)
            hasBonus = 1 if prc_corr_total_last3/100 >= 0.65 else 0

        thisExp.addData("Bonus", hasBonus)
    TextComponent end_block_msg_2
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $'End Block ' + str(blocks.thisN + 1)
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    TextComponent feedbackSC1
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startEstim = 0.5
      startVal [time (s)] = 0.5
      wrapWidth = 1
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      text:
        Summary of classification accuracy for each category:
    TextComponent feedbackSC2
      color = red
      letterHeight = 0.04
      pos = (0, -0.05)
      saveStartStop = False
      startEstim = 0.5
      startVal [time (s)] = 0.5
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      text [set every repeat]:
        $corr_table
    TextComponent feedbackTC1
      color = black
      disabled = True
      letterHeight = 0.04
      saveStartStop = False
      startEstim = 0.5
      startVal [condition] = ['TCN','TCR'].includes(expInfo['condition'])  &&  t >= 0.5
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      text [set every repeat]:
        $corr_overall
    ImageComponent next_block_fb
      image = img/next.png
      pos = (0, -0.4)
      saveStartStop = False
      size = next_buttonSize
      startEstim = 0.5
      startVal [time (s)] = 0.5
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    MouseComponent next_mouse_block_fb
      clickable = next_block_fb
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.5
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    CodeComponent compute_diff_indices
      Code Type = Both
      Begin Experiment:
        PS_dict_blocks = {};
        for cat_name in category_names:
            PS_dict_blocks[cat_name] = []
      Begin JS Experiment:
        PS_dict_blocks = {};
        category_names.forEach(cat_name => {
            PS_dict_blocks[cat_name] = [];
        });
      Begin JS Routine:
        if (['SCR','TCR'].includes(expInfo['condition'])) {
            RC_thisblock = [];
            prc_dict_thisblock = {};
            for (let icat = 0; icat < num_cats; icat++) {
                cat_name = category_names[icat];
                let num_item_cat = cat_list.filter(x => x === cat_name).length;
                let num_item_resp = resp_list.filter(y => y === cat_name).length;
                let num_item_total = cat_list.length;
                let num_item_cat_resp = cat_list.filter((x, index) => x === cat_name && resp_list[index] === cat_name).length;
                let H_rate = (num_item_cat_resp / num_item_cat);
                let FA_rate = ((num_item_resp - num_item_cat_resp) / (num_item_total - num_item_cat));
                let PS = (H_rate - FA_rate);
                PS_dict_blocks[cat_name].push(PS);
                let PS_sum = 0;
                let weight_sum = 0;
                let lambda = 0.5;
                for (let iblock = 0; iblock <= blocks.thisN; iblock++) {
                    let block_weight = Math.exp(lambda * (iblock - blocks.thisN));
                    weight_sum += block_weight;
                    PS_sum += (block_weight * PS_dict_blocks[cat_name][iblock]);
                }
                RC_thisblock.push((1 - PS_sum/weight_sum + 0.125));
            }
            let sumRC = RC_thisblock.reduce((a, b) => a + b, 0);
            for (let icat = 0; icat < num_cats; icat++) {
                cat_name = category_names[icat];
                prc_dict_thisblock[cat_name] = RC_thisblock[icat] / sumRC;
            }
        }
      Begin Routine:
        if expInfo['condition'] in ['SCR', 'TCR']:
            RC_thisblock = [];
            prc_dict_thisblock = {};
            for icat in range(num_cats):
                cat_name = category_names[icat]
                num_item_cat = sum(x == cat_name for x in cat_list)
                num_item_resp = sum(y == cat_name for y in resp_list)
                num_item_total = len(cat_list)
                num_item_cat_resp = sum((x == cat_name) and (y == cat_name) for x, y in zip(cat_list, resp_list))
                H_rate = num_item_cat_resp/num_item_cat
                FA_rate = (num_item_resp - num_item_cat_resp)/(num_item_total - num_item_cat)
                # the exact formula can be changed
                PS = H_rate - FA_rate
                PS_dict_blocks[cat_name].append(PS)
                PS_sum = 0
                weight_sum = 0
                decay_rate = 0.5;
                for iblock in range(blocks.thisN + 1):
                    block_weight = math.exp(decay_rate*(iblock - blocks.thisN))
                    weight_sum += block_weight
                    PS_sum += block_weight * PS_dict_blocks[cat_name][iblock]
                RC_thisblock.append(1 - PS_sum/weight_sum + 0.125)

            for icat in range(num_cats):
                cat_name = category_names[icat]
                prc_dict_thisblock[cat_name] = RC_thisblock[icat] / sum(RC_thisblock)
  Routine start_of_testProcess
    RoutineSettingsComponent start_of_testProcess
      saveStartStop = False
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    CodeComponent full_screen_12
      Code Type = Both
      Each Frame:
        if frameN > 10:
            if not psychoJS.window._windowAlreadyInFullScreen:
                alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate")
                quitPsychoJS('',false)
      Each JS Frame:
        if (frameN > 10) {
            if (! psychoJS.window._windowAlreadyInFullScreen) {
            alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate");
            quitPsychoJS('',false);
            }
        }
    TextComponent block_prompt_test
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'Starting Test Block ' + str(blocks.thisN + 1) +  ' of ' + str(blocks.nTotal)
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    CodeComponent initialize_accuracy_list
      Code Type = Both
      Begin JS Routine:
        accuracy_dict = {};
        category_names.forEach(cat_name => {
            accuracy_dict[cat_name] = [];
        });
      Begin Routine:
        accuracy_dict = {}
        for cat_name in category_names:
            accuracy_dict[cat_name] = []
    CodeComponent initialize_response_tracker
      Code Type = Auto->JS
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      Begin Routine:
        resp_list = []
        cat_list = []
  Routine testBlock_end_msg
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    TextComponent end_block_msg
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $'End Block ' + str(blocks.thisN + 1)
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  Routine fixation_buffer
    RoutineSettingsComponent fixation_buffer
      saveStartStop = False
      skipIf = train_trials.thisN != 0
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    CodeComponent full_screen_13
      Code Type = Both
      Each Frame:
        if frameN > 10:
            if not psychoJS.window._windowAlreadyInFullScreen:
                alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate")
                quitPsychoJS('',false)
      Each JS Frame:
        if (frameN > 10) {
            if (! psychoJS.window._windowAlreadyInFullScreen) {
            alert("looks like you exited full screen mode. You must stay in full screen mode to be eligible to participate");
            quitPsychoJS('',false);
            }
        }
    TextComponent fix_wait
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = loading...
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Flow
  LoopInitiator preload_trials loopType="TrialHandler"
    conditionsFile = stimuli/rock_image_info.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'file_name': 'I_Andesite_01.jpg', 'width': 800, 'height': 587},
      {'file_name': 'I_Andesite_02.jpg', 'width': 800, 'height': 850},
      {'file_name': 'I_Andesite_03.jpg', 'width': 800, 'height': 573},
      {'file_name': 'I_Andesite_04.jpg', 'width': 800, 'height': 596},
      {'file_name': 'I_Andesite_05.jpg', 'width': 800, 'height': 412},
      {'file_name': 'I_Andesite_06.jpg', 'width': 800, 'height': 684},
      {'file_name': 'I_Andesite_07.jpg', 'width': 800, 'height': 593},
      {'file_name': 'I_Andesite_09.jpg', 'width': 800, 'height': 600},
      {'file_name': 'I_Andesite_10.jpg', 'width': 800, 'height': 416},
      {'file_name': 'I_Andesite_11.jpg', 'width': 800, 'height': 492},
      {'file_name': 'I_Andesite_14.jpg', 'width': 800, 'height': 545},
      {'file_name': 'I_Andesite_16.jpg', 'width': 800, 'height': 601},
      {'file_name': 'I_Basalt_01.jpg', 'width': 800, 'height': 788},
      {'file_name': 'I_Basalt_02.jpg', 'width': 800, 'height': 645},
      {'file_name': 'I_Basalt_04.jpg', 'width': 800, 'height': 753},
      {'file_name': 'I_Basalt_05.jpg', 'width': 800, 'height': 818},
      {'file_name': 'I_Basalt_06.jpg', 'width': 800, 'height': 706},
      {'file_name': 'I_Basalt_08.jpg', 'width': 800, 'height': 1044},
      {'file_name': 'I_Basalt_09.jpg', 'width': 800, 'height': 620},
      {'file_name': 'I_Basalt_10.jpg', 'width': 800, 'height': 585},
      {'file_name': 'I_Basalt_11.jpg', 'width': 800, 'height': 536},
      {'file_name': 'I_Basalt_12.jpg', 'width': 800, 'height': 601},
      {'file_name': 'I_Basalt_14.jpg', 'width': 800, 'height': 582},
      {'file_name': 'I_Basalt_16.jpg', 'width': 800, 'height': 766}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
    Routine load_image_info
  LoopTerminator preload_trials
  LoopInitiator TrainInstructions_controller loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 9999
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    Routine instPrep
    LoopInitiator TrainInstruction_trials loopType="TrialHandler"
      Selected rows = $cur_row_train_string
      conditionsFile = $instruct_filename
      isTrials = False
      loopType = sequential
      nReps = show_instructions_train
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      conditions:
        [{'train_slide': 'Instructions/train1.png'},
        {'train_slide': 'Instructions/train2.png'},
        {'train_slide': 'Instructions/train3R.png'},
        {'train_slide': 'Instructions/train4.png'},
        {'train_slide': 'Instructions/train5.png'},
        {'train_slide': 'Instructions/train6.png'},
        {'train_slide': 'Instructions/train7.png'}]
      Routine train_instructions
    LoopTerminator TrainInstruction_trials
  LoopTerminator TrainInstructions_controller
  Routine expt_setup
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = nblock
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    Routine start_of_trainingProcess
    LoopInitiator train_trials loopType="TrialHandler"
      loopType = random
      nReps = 2*num_cats
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      Routine fixation
      Routine fixation_buffer
      Routine condition_switch
      LoopInitiator SC_cond_filter loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = nrep_selection
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        Routine Selection_train
      LoopTerminator SC_cond_filter
      LoopInitiator TC_cond_filter loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = nrep_sampling
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        Routine Sampling_train
      LoopTerminator TC_cond_filter
      Routine Classification_train
      Routine feedback_corrective
    LoopTerminator train_trials
    Routine end_of_trainingProcess
    LoopInitiator testInstructions_controller loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = testInstr_nrep
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      Routine test_instrPrep
      LoopInitiator testInstruction_trials loopType="TrialHandler"
        Selected rows = $cur_row_test_string
        conditionsFile = stimuli/test_instructions.xlsx
        isTrials = False
        loopType = sequential
        nReps = show_instructions_test
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        conditions:
          [{'test_slide': 'Instructions/test1.png'},
          {'test_slide': 'Instructions/test2.png'},
          {'test_slide': 'Instructions/test3.png'}]
        Routine test_instructions
      LoopTerminator testInstruction_trials
    LoopTerminator testInstructions_controller
    Routine start_of_testProcess
    LoopInitiator test_trials loopType="TrialHandler"
      loopType = random
      nReps = 2*num_cats
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      Routine Classification_test
      Routine feedback_neutral
    LoopTerminator test_trials
    Routine end_of_testProcess
  LoopTerminator blocks
  Routine debrief
